PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = SelectiveAttentionTest
  keyboardBackend = ioHub
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Routines
  Routine Intro
    TextComponent IntroText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Velkommen til Opmærksomheds testen.

        Du vil blive præsenteret for bogstaver
        hold øje med b og p.

        Hvis du ser p tryk på venstre alt knap
        Hvis du ser b tryk på højre alt knap

        Hvis det gik stærkt tryk blot på den alt knap
        du har den bedste fornemmelse for.

        tryk på enter for at fortsætte.

        god fornøjelse
    KeyboardComponent next_screen1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FixationCross
    TextComponent FixationCrossText
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = X
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  Routine Feedback
    CodeComponent ShowFeedback
      Code Type = Auto->JS
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      Begin Routine:
        #from the previous routine feedback will be provided.
        if enableHappyface:
            fasterOpacity = 0.0;
            sadOpacity = 0.0;
            happyOpacity = 1.0;

        if enableSadface:
            fasterOpacity = 0.0;
            sadOpacity = 1.0;
            happyOpacity = 0.0;

        if enableFaster:
            fasterOpacity = 1.0;
            sadOpacity = 0.0;
            happyOpacity = 0.0;
    TextComponent Faster
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.07
      opacity [set every repeat] = fasterOpacity
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Hurtigere
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    ImageComponent happy
      image = graphic/happyface.png
      opacity [set every repeat] = happyOpacity
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent sad
      image = graphic/sadface.png
      opacity [set every repeat] = sadOpacity
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Pause
    TextComponent Pause_Text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Pause

        tryk på en tast når du er klar til at fortsætte
    KeyboardComponent next_screen1_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AudioVisualDistractorStimuli
    CodeComponent TrialController
      Code Type = Auto->JS
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      Begin Experiment:
        allowedBNeutralAV = 2;
        allowedBIncongruenceAV = 2;
        allowedBCongruenceAV = 2;
        allowedPNeutralAV = 2;
        allowedPIncongruenceAV = 2;
        allowedPCongruenceAV = 2;


        #Default Distractor Volume
        p_dis_volume = 0.0
        b_dis_volume = 0.0
        g_dis_volume = 0.0
      Begin Routine:
        p_targetpos = (1,1)
        b_targetpos = (1,1)
        p_distractorpos = (1,1)
        b_distractorpos = (1,1)
        g_distractorpos = (1,1)
        h_fillerpos = (1,1)
        l_fillerpos = (1,1)
        y_fillerpos = (1,1)
        p_dis_volume = 0.0
        b_dis_volume = 0.0
        g_dis_volume = 0.0

        def FindTargetAndDistractor(allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral):
            tar = np.random.choice(targets);
            tarAndDist = FindDistractor(tar, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral);
            return tarAndDist;

        def FindDistractor(target, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral):

            dist = np.random.choice(distractors);
            if target == 'p' and dist == 'p' and allowedPCongruence > 0:
                allowedPCongruence = allowedPCongruence -1;
                thisExp.addData('Condition', 'Congruent')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'p' and dist == 'b' and allowedPIncongruence > 0:
                allowedPIncongruence = allowedPIncongruence -1;
                thisExp.addData('Condition', 'Incongruent')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'p' and dist == 'g' and allowedPNeutral > 0:
                allowedPNeutral = allowedPNeutral -1;
                thisExp.addData('Condition', 'Neutral')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'b' and dist == 'p' and allowedBIncongruence > 0:
                allowedBIncongruence = allowedBIncongruence -1;
                thisExp.addData('Condition', 'Incongruent')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'b' and dist == 'b' and allowedBCongruence > 0:
                allowedBCongruence = allowedBCongruence -1;
                thisExp.addData('Condition', 'Congruent')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'b' and dist == 'g' and allowedBNeutral > 0:
                allowedBNeutral = allowedBNeutral -1;
                thisExp.addData('Condition', 'Neutral')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            else:
               return FindDistractor(np.random.choice(targets), allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral);

        # setup variables to control the experiment
        targets = ['p','b'];
        distractors = ['p','b','g'];
        fillers = ['h','l','y'];
        fillerposes = ['upLeft', 'lowLeft', 'upRight', 'lowRight'];
        targetpos = (1,1);

        # Setup scene
        # Find the target position
        targetposName = np.random.choice(fillerposes)
        if targetposName == 'upLeft':
            targetpos = filler_up_left_pos;
        elif targetposName == 'lowLeft':
            targetpos = filler_low_left_pos;
        elif targetposName == 'upRight':
            targetpos = filler_up_right_pos;
        elif targetposName == 'lowRight':
            targetpos = filler_low_right_pos;
        fillerposes.remove(targetposName);
        # find which will be the target and which will be the distractor
        targetAndDistractor = FindTargetAndDistractor(allowedPCongruenceAV, allowedPIncongruenceAV, allowedPNeutralAV, allowedBCongruenceAV, allowedBIncongruenceAV, allowedBNeutralAV)

        target = targetAndDistractor[0];
        distractor = targetAndDistractor[1];

        allowedPCongruenceAV = targetAndDistractor[2]
        allowedPIncongruenceAV = targetAndDistractor[3]
        allowedPNeutralAV = targetAndDistractor[4]
        allowedBCongruenceAV = targetAndDistractor[5]
        allowedBIncongruenceAV = targetAndDistractor[6]
        allowedBNeutralAV = targetAndDistractor[7]

        targetletter = target;

        if target == 'p':
            p_targetpos = targetpos
        elif target == 'b':
            b_targetpos = targetpos

        if distractor == 'p':
            p_distractorpos = distractorPos
            p_dis_volume = 1.0
        elif distractor == 'b':
            b_distractorpos = distractorPos
            b_dis_volume = 1.0
        elif distractor == 'g':
            g_distractorpos = distractorPos
            g_dis_volume = 1.0
        # Randomly place the fillers

        np.random.shuffle(fillerposes);
        np.random.shuffle(fillers);
        index = (0,1,2)

        for i in index:
                if fillerposes[i] == 'upLeft' and fillers[i] == 'h':
                    h_fillerpos = filler_up_left_pos;
                if fillerposes[i] == 'upLeft' and fillers[i] == 'l':
                    l_fillerpos = filler_up_left_pos;
                if fillerposes[i] == 'upLeft' and fillers[i] == 'y':
                    y_fillerpos = filler_up_left_pos;

                if fillerposes[i] == 'lowLeft' and fillers[i] == 'h':
                    h_fillerpos = filler_low_left_pos;
                if fillerposes[i] == 'lowLeft' and fillers[i] == 'l':
                    l_fillerpos = filler_low_left_pos;
                if fillerposes[i] == 'lowLeft' and fillers[i] == 'y':
                    y_fillerpos = filler_low_left_pos;

                if fillerposes[i] == 'lowRight' and fillers[i] == 'h':
                    h_fillerpos = filler_low_right_pos;
                if fillerposes[i] == 'lowRight' and fillers[i] == 'l':
                    l_fillerpos = filler_low_right_pos;
                if fillerposes[i] == 'lowRight' and fillers[i] == 'y':
                    y_fillerpos = filler_low_right_pos;

                if fillerposes[i] == 'upRight' and fillers[i] == 'h':
                    h_fillerpos = filler_up_right_pos;
                if fillerposes[i] == 'upRight' and fillers[i] == 'l':
                    l_fillerpos = filler_up_right_pos;
                if fillerposes[i] == 'upRight' and fillers[i] == 'y':
                    y_fillerpos = filler_up_right_pos;
    TextComponent p_Target
      color = -1.0000, -1.0000, -1.0000
      font [set every repeat] = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = p_targetpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = p
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    TextComponent b_Target
      color = -1.0000, -1.0000, -1.0000
      font [set every repeat] = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = b_targetpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = b
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    TextComponent p_Distractor
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = p_distractorpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = p
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    TextComponent b_Distractor
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = b_distractorpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = b
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    TextComponent g_Distractor
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = g_distractorpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = g
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    TextComponent h_Filler
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = h_fillerpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = h
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    TextComponent l_Filler
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = l_fillerpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = l
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    TextComponent y_filler
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = y_fillerpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = y
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    SoundComponent p_Dis_Sound
      hamming = False
      sound = audio/p_combined.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      volume [set every repeat] = p_dis_volume
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    SoundComponent b_Dis_Sound
      hamming = False
      sound = audio/p_combined.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      volume [set every repeat] = b_dis_volume
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    SoundComponent g_Dis_Sound
      hamming = False
      sound = audio/g_combined.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      volume [set every repeat] = g_dis_volume
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    CodeComponent recordAttentionReaction
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy.hardware import keyboard
      Begin Routine:
        enableHappyface = False;
        enableSadface = False;
        enableFaster = False;
        mousepressed = 0;

        if targetletter == 'p':
            isItP = True;
            isItB = False;

        if targetletter == 'b':
            isItB = True;
            isItP = False;
      Each Frame:
        #left alt = P
        #right alt = B

        kb = keyboard.Keyboard();
        keys = kb.getKeys()

        if keys:
            print (keys[-1].name)
            if isItP and keys[-1].name == 'lalt' and mousepressed == 0 :
                enableHappyface = True;
                enableSadface = False;
                enableFaster = False;
                mousepressed += 1;
            elif isItB and keys[-1].name == 'ralt' and mousepressed == 0 :
                enableHappyface = True;
                enableSadface = False;
                enableFaster = False;
                mousepressed += 1;
            elif isItP and keys[-1].name == 'ralt' and mousepressed == 0 :
                enableHappyface = False;
                enableSadface = True;
                enableFaster = False;
                mousepressed += 1;
            elif isItB and keys[-1].name == 'lalt' and mousepressed == 0 :
                enableHappyface = False;
                enableSadface = True;
                enableFaster = False;
                mousepressed += 1;
      End Routine:
        if enableHappyface == False and enableSadface == False:
            enableFaster = True;

        if enableHappyface == True:
            thisExp.addData('Response', 'Correct')
            thisExp.addData('Response_code', 1.0)

        if enableSadface == True:
            thisExp.addData('Response', 'Incorrect')
            thisExp.addData('Response_code', 2.0)

        if enableFaster == True:
            thisExp.addData('Response', 'None')
            thisExp.addData('Response_code', 0.0)
    KeyboardComponent key
      allowedKeys = 'lalt','ralt'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.2
      store = all keys
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    ImageComponent whiteimage
      color = 1.0000, 1.0000, 1.0000
      image = graphic/black.png
      size = (1, 1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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  Routine VisualDistractorStimuli
    CodeComponent VisualTrialController
      Code Type = Auto->JS
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      Before Experiment:
        import numpy as np
      Begin Experiment:
        # setup variables to control the experiment
        distractorPos = (0.0,0.3)
        filler_up_left_pos = (-0.15,0.1)
        filler_low_left_pos = (-0.15,-0.1)
        filler_low_right_pos = (0.15,-0.1)
        filler_up_right_pos = (0.15,0.1)
        allowedBNeutral = 2;
        allowedBIncongruence = 2;
        allowedBCongruence = 2;
        allowedPNeutral = 2;
        allowedPIncongruence = 2;
        allowedPCongruence = 2;
        targetletter = 'g';


        #Default positions
        p_targetpos = (1,1)
        b_targetpos = (1,1)
        p_distractorpos = (1,1)
        b_distractorpos = (1,1)
        g_distractorpos = (1,1)
        h_fillerpos = (1,1)
        l_fillerpos = (1,1)
        y_fillerpos = (1,1)
      Begin Routine:
        p_targetpos = (1,1)
        b_targetpos = (1,1)
        p_distractorpos = (1,1)
        b_distractorpos = (1,1)
        g_distractorpos = (1,1)
        h_fillerpos = (1,1)
        l_fillerpos = (1,1)
        y_fillerpos = (1,1)
        p_dis_volume = 0.0
        b_dis_volume = 0.0
        g_dis_volume = 0.0

        def FindTargetAndDistractor(allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral):
            tar = np.random.choice(targets);
            tarAndDist = FindDistractor(tar, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral);
            return tarAndDist;

        def FindDistractor(target, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral):

            dist = np.random.choice(distractors);
            if target == 'p' and dist == 'p' and allowedPCongruence > 0:
                allowedPCongruence = allowedPCongruence -1;
                thisExp.addData('Condition', 'Congruent')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'p' and dist == 'b' and allowedPIncongruence > 0:
                allowedPIncongruence = allowedPIncongruence -1;
                thisExp.addData('Condition', 'Incongruent')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'p' and dist == 'g' and allowedPNeutral > 0:
                allowedPNeutral = allowedPNeutral -1;
                thisExp.addData('Condition', 'Neutral')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'b' and dist == 'p' and allowedBIncongruence > 0:
                allowedBIncongruence = allowedBIncongruence -1;
                thisExp.addData('Condition', 'Incongruent')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'b' and dist == 'b' and allowedBCongruence > 0:
                allowedBCongruence = allowedBCongruence -1;
                thisExp.addData('Condition', 'Congruent')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'b' and dist == 'g' and allowedBNeutral > 0:
                allowedBNeutral = allowedBNeutral -1;
                thisExp.addData('Condition', 'Neutral')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            else:
               return FindDistractor(np.random.choice(targets), allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral);

        # setup variables to control the experiment
        targets = ['p','b'];
        distractors = ['p','b','g'];
        fillers = ['h','l','y'];
        fillerposes = ['upLeft', 'lowLeft', 'upRight', 'lowRight'];
        targetpos = (1,1);

        # Setup scene
        # Find the target position
        targetposName = np.random.choice(fillerposes)
        if targetposName == 'upLeft':
            targetpos = filler_up_left_pos;
        elif targetposName == 'lowLeft':
            targetpos = filler_low_left_pos;
        elif targetposName == 'upRight':
            targetpos = filler_up_right_pos;
        elif targetposName == 'lowRight':
            targetpos = filler_low_right_pos;
        fillerposes.remove(targetposName);
        # find which will be the target and which will be the distractor
        targetAndDistractor = FindTargetAndDistractor(allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral)

        target = targetAndDistractor[0];
        distractor = targetAndDistractor[1];

        allowedPCongruence = targetAndDistractor[2]
        allowedPIncongruence = targetAndDistractor[3]
        allowedPNeutral = targetAndDistractor[4]
        allowedBCongruence = targetAndDistractor[5]
        allowedBIncongruence = targetAndDistractor[6]
        allowedBNeutral = targetAndDistractor[7]

        targetletter = target;

        if target == 'p':
            p_targetpos = targetpos
        elif target == 'b':
            b_targetpos = targetpos

        if distractor == 'p':
            p_distractorpos = distractorPos
        elif distractor == 'b':
            b_distractorpos = distractorPos
        elif distractor == 'g':
            g_distractorpos = distractorPos
        # Randomly place the fillers

        np.random.shuffle(fillerposes);
        np.random.shuffle(fillers);
        index = (0,1,2)

        for i in index:
                if fillerposes[i] == 'upLeft' and fillers[i] == 'h':
                    h_fillerpos = filler_up_left_pos;
                if fillerposes[i] == 'upLeft' and fillers[i] == 'l':
                    l_fillerpos = filler_up_left_pos;
                if fillerposes[i] == 'upLeft' and fillers[i] == 'y':
                    y_fillerpos = filler_up_left_pos;

                if fillerposes[i] == 'lowLeft' and fillers[i] == 'h':
                    h_fillerpos = filler_low_left_pos;
                if fillerposes[i] == 'lowLeft' and fillers[i] == 'l':
                    l_fillerpos = filler_low_left_pos;
                if fillerposes[i] == 'lowLeft' and fillers[i] == 'y':
                    y_fillerpos = filler_low_left_pos;

                if fillerposes[i] == 'lowRight' and fillers[i] == 'h':
                    h_fillerpos = filler_low_right_pos;
                if fillerposes[i] == 'lowRight' and fillers[i] == 'l':
                    l_fillerpos = filler_low_right_pos;
                if fillerposes[i] == 'lowRight' and fillers[i] == 'y':
                    y_fillerpos = filler_low_right_pos;

                if fillerposes[i] == 'upRight' and fillers[i] == 'h':
                    h_fillerpos = filler_up_right_pos;
                if fillerposes[i] == 'upRight' and fillers[i] == 'l':
                    l_fillerpos = filler_up_right_pos;
                if fillerposes[i] == 'upRight' and fillers[i] == 'y':
                    y_fillerpos = filler_up_right_pos;
    TextComponent p_Target_2
      color = -1.0000, -1.0000, -1.0000
      font [set every repeat] = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = p_targetpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = p
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    TextComponent b_Target_2
      color = -1.0000, -1.0000, -1.0000
      font [set every repeat] = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = b_targetpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = b
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    TextComponent p_Distractor_2
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = p_distractorpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = p
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    TextComponent b_Distractor_2
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = b_distractorpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = b
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    TextComponent g_Distractor_2
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = g_distractorpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = g
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    TextComponent h_Filler_2
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = h_fillerpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = h
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    TextComponent l_Filler_2
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = l_fillerpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = l
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    TextComponent y_filler_2
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = y_fillerpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = y
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    CodeComponent recordAttentionReaction_2
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy.hardware import keyboard
      Begin Experiment:
        isItP = False;
        isItB = False;
        enableSadface = False;
        enableHappyface = False;
        enableFaster = False;
      Begin Routine:
        enableHappyface = False;
        enableSadface = False;
        enableFaster = False;
        mousepressed = 0;

        if targetletter == 'p':
            isItP = True;
            isItB = False;

        if targetletter == 'b':
            isItB = True;
            isItP = False;
      Each Frame:
        #left alt = P
        #right alt = B

        kb = keyboard.Keyboard();
        keys = kb.getKeys()

        if keys:
            print (keys[-1].name)
            if isItP and keys[-1].name == 'lalt' and mousepressed == 0 :
                enableHappyface = True;
                enableSadface = False;
                enableFaster = False;
                mousepressed += 1;
            elif isItB and keys[-1].name == 'ralt' and mousepressed == 0 :
                enableHappyface = True;
                enableSadface = False;
                enableFaster = False;
                mousepressed += 1;
            elif isItP and keys[-1].name == 'ralt' and mousepressed == 0 :
                enableHappyface = False;
                enableSadface = True;
                enableFaster = False;
                mousepressed += 1;
            elif isItB and keys[-1].name == 'lalt' and mousepressed == 0 :
                enableHappyface = False;
                enableSadface = True;
                enableFaster = False;
                mousepressed += 1;
      End Routine:
        if enableHappyface == False and enableSadface == False:
            enableFaster = True;

        if enableHappyface == True:
            thisExp.addData('Response', 'Correct')
            thisExp.addData('Response_code', 1.0)

        if enableSadface == True:
            thisExp.addData('Response', 'Incorrect')
            thisExp.addData('Response_code', 2.0)

        if enableFaster == True:
            thisExp.addData('Response', 'None')
            thisExp.addData('Response_code', 0.0)
    KeyboardComponent Key_2
      allowedKeys = 'lalt','ralt'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.2
      store = all keys
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    ImageComponent whiteimage_2
      color = 1.0000, 1.0000, 1.0000
      image = graphic/black.png
      size = (1, 1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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  Routine AudioDistractorStimuli
    CodeComponent AudioController
      Code Type = Auto->JS
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      Begin Experiment:
        allowedBNeutralA = 2;
        allowedBIncongruenceA = 2;
        allowedBCongruenceA = 2;
        allowedPNeutralA = 2;
        allowedPIncongruenceA = 2;
        allowedPCongruenceA = 2;


        #Default Distractor Volume
        p_dis_volume = 0.0
        b_dis_volume = 0.0
        g_dis_volume = 0.0
      Begin Routine:
        p_targetpos = (1,1)
        b_targetpos = (1,1)
        h_fillerpos = (1,1)
        l_fillerpos = (1,1)
        y_fillerpos = (1,1)
        p_dis_volume = 0.0
        b_dis_volume = 0.0
        g_dis_volume = 0.0

        def FindTargetAndDistractor(allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral):
            tar = np.random.choice(targets);
            tarAndDist = FindDistractor(tar, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral);
            return tarAndDist;

        def FindDistractor(target, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral):

            dist = np.random.choice(distractors);
            if target == 'p' and dist == 'p' and allowedPCongruence > 0:
                allowedPCongruence = allowedPCongruence -1;
                thisExp.addData('Condition', 'Congruent')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'p' and dist == 'b' and allowedPIncongruence > 0:
                allowedPIncongruence = allowedPIncongruence -1;
                thisExp.addData('Condition', 'Incongruent')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'p' and dist == 'g' and allowedPNeutral > 0:
                allowedPNeutral = allowedPNeutral -1;
                thisExp.addData('Condition', 'Neutral')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'b' and dist == 'p' and allowedBIncongruence > 0:
                allowedBIncongruence = allowedBIncongruence -1;
                thisExp.addData('Condition', 'Incongruent')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'b' and dist == 'b' and allowedBCongruence > 0:
                allowedBCongruence = allowedBCongruence -1;
                thisExp.addData('Condition', 'Congruent')
                return target, dist, allowedPCongruence, allowedPIncongruenceA, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'b' and dist == 'g' and allowedBNeutral > 0:
                allowedBNeutral = allowedBNeutral -1;
                thisExp.addData('Condition', 'Neutral')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            else:
               return FindDistractor(np.random.choice(targets), allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral);

        # setup variables to control the experiment
        targets = ['p','b'];
        distractors = ['p','b','g'];
        fillers = ['h','l','y'];
        fillerposes = ['upLeft', 'lowLeft', 'upRight', 'lowRight'];
        targetpos = (1,1);

        # Setup scene
        # Find the target position
        targetposName = np.random.choice(fillerposes)
        if targetposName == 'upLeft':
            targetpos = filler_up_left_pos;
        elif targetposName == 'lowLeft':
            targetpos = filler_low_left_pos;
        elif targetposName == 'upRight':
            targetpos = filler_up_right_pos;
        elif targetposName == 'lowRight':
            targetpos = filler_low_right_pos;
        fillerposes.remove(targetposName);
        # find which will be the target and which will be the distractor
        targetAndDistractor = FindTargetAndDistractor(allowedPCongruenceA, allowedPIncongruenceA, allowedPNeutralA, allowedBCongruenceA, allowedBIncongruenceA, allowedBNeutralA)

        target = targetAndDistractor[0];
        distractor = targetAndDistractor[1];

        allowedPCongruenceA = targetAndDistractor[2]
        allowedPIncongruenceA = targetAndDistractor[3]
        allowedPNeutralA = targetAndDistractor[4]
        allowedBCongruenceA = targetAndDistractor[5]
        allowedBIncongruenceA = targetAndDistractor[6]
        allowedBNeutralA = targetAndDistractor[7]

        targetletter = target;

        if target == 'p':
            p_targetpos = targetpos
        elif target == 'b':
            b_targetpos = targetpos

        if distractor == 'p':
            p_dis_volume = 1.0
        elif distractor == 'b':
            b_dis_volume = 1.0
        elif distractor == 'g':
            g_dis_volume = 1.0
        # Randomly place the fillers

        np.random.shuffle(fillerposes);
        np.random.shuffle(fillers);
        index = (0,1,2)

        for i in index:
                if fillerposes[i] == 'upLeft' and fillers[i] == 'h':
                    h_fillerpos = filler_up_left_pos;
                if fillerposes[i] == 'upLeft' and fillers[i] == 'l':
                    l_fillerpos = filler_up_left_pos;
                if fillerposes[i] == 'upLeft' and fillers[i] == 'y':
                    y_fillerpos = filler_up_left_pos;

                if fillerposes[i] == 'lowLeft' and fillers[i] == 'h':
                    h_fillerpos = filler_low_left_pos;
                if fillerposes[i] == 'lowLeft' and fillers[i] == 'l':
                    l_fillerpos = filler_low_left_pos;
                if fillerposes[i] == 'lowLeft' and fillers[i] == 'y':
                    y_fillerpos = filler_low_left_pos;

                if fillerposes[i] == 'lowRight' and fillers[i] == 'h':
                    h_fillerpos = filler_low_right_pos;
                if fillerposes[i] == 'lowRight' and fillers[i] == 'l':
                    l_fillerpos = filler_low_right_pos;
                if fillerposes[i] == 'lowRight' and fillers[i] == 'y':
                    y_fillerpos = filler_low_right_pos;

                if fillerposes[i] == 'upRight' and fillers[i] == 'h':
                    h_fillerpos = filler_up_right_pos;
                if fillerposes[i] == 'upRight' and fillers[i] == 'l':
                    l_fillerpos = filler_up_right_pos;
                if fillerposes[i] == 'upRight' and fillers[i] == 'y':
                    y_fillerpos = filler_up_right_pos;
    TextComponent p_Target_3
      color = -1.0000, -1.0000, -1.0000
      font [set every repeat] = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = p_targetpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = p
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    TextComponent b_Target_3
      color = -1.0000, -1.0000, -1.0000
      font [set every repeat] = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = b_targetpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = b
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    TextComponent h_Filler_3
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = h_fillerpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = h
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    TextComponent l_Filler_3
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = l_fillerpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = l
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    TextComponent y_filler_3
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = y_fillerpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = y
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    SoundComponent p_Dis_Sound_2
      hamming = False
      sound = audio/p_combined.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      volume [set every repeat] = p_dis_volume
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    SoundComponent b_Dis_Sound_2
      hamming = False
      sound = audio/b_combined.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      volume [set every repeat] = b_dis_volume
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    SoundComponent g_Dis_Sound_2
      hamming = False
      sound = audio/g_combined.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      volume [set every repeat] = g_dis_volume
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    CodeComponent recordAttentionReaction_3
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy.hardware import keyboard
      Begin Routine:
        enableHappyface = False;
        enableSadface = False;
        enableFaster = False;
        mousepressed = 0;

        if targetletter == 'p':
            isItP = True;
            isItB = False;

        if targetletter == 'b':
            isItB = True;
            isItP = False;
      Each Frame:
        #left alt = P
        #right alt = B

        kb = keyboard.Keyboard();
        keys = kb.getKeys()

        if keys:
            print (keys[-1].name)
            if isItP and keys[-1].name == 'lalt' and mousepressed == 0 :
                enableHappyface = True;
                enableSadface = False;
                enableFaster = False;
                mousepressed += 1;
            elif isItB and keys[-1].name == 'ralt' and mousepressed == 0 :
                enableHappyface = True;
                enableSadface = False;
                enableFaster = False;
                mousepressed += 1;
            elif isItP and keys[-1].name == 'ralt' and mousepressed == 0 :
                enableHappyface = False;
                enableSadface = True;
                enableFaster = False;
                mousepressed += 1;
            elif isItB and keys[-1].name == 'lalt' and mousepressed == 0 :
                enableHappyface = False;
                enableSadface = True;
                enableFaster = False;
                mousepressed += 1;
      End Routine:
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    KeyboardComponent key_3
      allowedKeys = 'lalt','ralt'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.2
      store = all keys
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    ImageComponent whiteimage_3
      color = 1.0000, 1.0000, 1.0000
      image = graphic/black.png
      size = (1, 1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5
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Flow
  Routine Intro
  LoopInitiator VisualDistractionTrials loopType="TrialHandler"
    loopType = random
    nReps = 12
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    Routine FixationCross
    Routine VisualDistractorStimuli
    Routine Feedback
  LoopTerminator VisualDistractionTrials
  Routine Pause
  LoopInitiator VisualAndAudioDistractor loopType="TrialHandler"
    loopType = random
    nReps = 12
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    Routine FixationCross
    Routine AudioVisualDistractorStimuli
    Routine Feedback
  LoopTerminator VisualAndAudioDistractor
  Routine Pause
  LoopInitiator AudioDistractorFiles loopType="TrialHandler"
    loopType = random
    nReps = 12
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    Routine FixationCross
    Routine AudioDistractorStimuli
    Routine Feedback
  LoopTerminator AudioDistractorFiles
